forall delete_section()
/* -----------------------------------------------------
    Layer V Cortical Pyramidal Cell

    Based on Yu Yuguo ( May 1, 2008)

20150512 NTC
Updated for use with 
ca.mod
kca.mod
km.mod
kv.mod
na12.mod
na16.mod
na.mod
that have been revised to eliminate a spurious 
temperature-dependence of effective channel density.
This involved multiplying the following parameters
gbar_ca
gbar_kca
gbar_km
gbar_kv
gbar_na12
gbar_na16
gbar_na
by a factor of 3.2094.
See the header in na.mod for details.
----------------------------------------------------- */

TADJ = 3.2094 // see comment above


objref somatodendritic, dendritic




// --------------------------------------------------
//    Parameter Settings
// --------------------------------------------------

/* Global */
  dt = 0.01
  celsius   = 37
  steps_per_ms = 1/dt
  tstop = 100
  v_init = -70

/* Others */
  delay = 2  // global delay for preparing
  axonOnSoma=1

/* Passive membrane */
  ra        = 150  // decrease ad to decrease of soma vth variability, increase axon's vth variability
  global_ra = ra
  rm        = 30000   // g_pas=1/rm
  c_m       = 0.5
  cm_myelin = 0.02
  g_pas_node = 0.02

/* Active channels */
  // Nav
  Ena = 60
/*
  gna12_soma = 80
  gna12_dend = 80
  gna12_ais_max = 3200   // Nav1.2
  gna16_ais_max = 3200   // Nav1.6
  gna16_nakeaxon= 300
  gna12_myelin=20       // Nav1.2 at myelins
  gna16_node = 3200     // Nav1.6 at node
*/
  gna12_soma = 80*TADJ
  gna12_dend = 80*TADJ
  gna12_ais_max = 3200*TADJ   // Nav1.2
  gna16_ais_max = 3200*TADJ   // Nav1.6
  gna16_nakeaxon= 300*TADJ
  gna12_myelin=20*TADJ       // Nav1.2 at myelins
  gna16_node = 3200*TADJ     // Nav1.6 at node

  vhalf_na12 = -30
  vhalf_na16 = -43
  vhalf_na = -30

  // Kv
  Ek = -90
//  gkv_soma = 20
//  gkv_dend = 10
//  gkv_axon = 1000
  gkv_soma = 20*TADJ
  gkv_dend = 10*TADJ
  gkv_axon = 1000*TADJ

  // Km
//  gkm = 0.3
  gkm = 0.3*TADJ
  gkm_soma = gkm
  gkm_soma = gkm

  // Kca
//  gkca = 3
  gkca = 3*TADJ
  gkca_soma = gkca

  // Ca
  Eca=140
//  gca = 0.3
  gca = 0.3*TADJ
  gca_soma = gca




// ------------------------------------------------
//    Cell Geometry
// ------------------------------------------------


/* Clean up */
  forall delete_section()

/* Soma and Dendrites */
  load_file("morphologies/j8.hoc")

  // build a sectionlist for soma and dendrites
  somatodendritic = new SectionList()
  forall {
    if (L/nseg>40) {
      nseg = L/40 + 1
    }    // make sure no segments exceed 40 uM length. Note, soma.nseg remains 10.
    somatodendritic.append()  // soma and dendrites are all included
  }


  // build a sectionlist for dendrites only
  dendritic = new SectionList()
  forsec somatodendritic dendritic.append()
  soma  dendritic.remove()     // remove soma for pure dendritic sectionlist

    define_shape() // Define shape in pt3d

  distance(0,axonOnSoma)  // set the point 0,0 as the origin


// ----------------------------------------------------
//  Insert Density Mechanisms
// ----------------------------------------------------

/* ---------------------------------------------
     Define the Density Mechanisms
----------------------------------------------*/

// --------------------------------------------
//  Install Passive Properties
// --------------------------------------------

proc install_passive() {

  // Forall
  forall {
    insert pas
    Ra = ra
    cm = c_m
    g_pas = 1/rm
    e_pas = v_init
  }

  soma.cm=1
}


// --------------------------------------------
//  Install Active Channels
// --------------------------------------------

proc  install_channels() {

  /* Add Na to dendritic*/
    forsec dendritic {
      insert na gbar_na=0
      insert na12  gbar_na12=0
      insert na16  gbar_na16=0
     }

  /* Add all kinds of channels to all sections*/
    forall {
      insert kv    gbar_kv=0
      insert km    gbar_km=0
      insert kca   gbar_kca=0
      insert ca    gbar_ca=0
     }

    // Added by Hu
    vshift_na12 = -35 - vhalf_na12 -10  // negative shift of input voltage, high threshold  -30mV
    vshift_na16 = -35 - vhalf_na16 -10    // positive shift of input voltage, low threshold  -43mV
    vshift_na = -35 - vhalf_na -10  // the same as Na12



  /* Channel Constants */
    forall if(ismembrane("k_ion")) ek = Ek
    forall if(ismembrane("na_ion")) ena = Ena
    forall if(ismembrane("ca_ion")) {
      eca = Eca
      ion_style("ca_ion",0,1,0,0,0)
      vshift_ca = 0
    }

  /* dendritic */
    forsec dendritic {

    /********* NOTE *********/
    // channel densities for ca, kca, km, kv, na12, na16, and na
    // are all 3.2094 times larger than the comments indicate
    // see comment at top of this file 
    /************************/

      gbar_na = gna12_dend    // 80
      gbar_kv = gkv_dend        // 20
      gbar_km  = gkm            // 0.3
      gbar_kca = gkca           // 0.3
      gbar_ca = gca             // 0.3
      insert cad                // Internal calcium concentration mechanism only at somatodendritic region.
    }
    soma {
      gbar_kv = gkv_soma            // 20
      gbar_km = gkm_soma            // 0.3
      gbar_kca = gkca_soma          // 0.3
      gbar_ca = gca_soma            // 0.3
      insert cad                // Internal calcium concentration mechanism only at somatodendritic region.
    }
}
proc  install_chanrhod() {
        /* INSERT CHANNELRHODOPSIN-2 */

    soma {insert chanrhod}
    forsec "a" {insert chanrhod}
}

// Install passive membrane properties
install_passive()

// Install active channels
install_channels()

// Install Channelrhodopsin
install_chanrhod()
